PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'How old are you (in years)?': '', 'Are you male or female (M or F)?': '', 'Do you have normal vision and hearing (Y or N)?': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1600, 1200]
  color = Black
  expName = Prime-Probe
  keyboardBackend = ioHub
  logging level = debug
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Routines
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
  Routine Feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        print("----ROUTINE RESULTS----")
        print(f"key_response: {key_response}")
        print(f"key_correct: {key_correct}")
        print(f"psychopy_response_time (ms): {psychopy_response_time}")
        print(f"arduino_response_time (ms): {arduino_response_time}")

        #if key_resp.keys and key_resp.corr and key_resp.rt > 0.933 and key_resp.rt < 1.833:#stored on last run routine
        if key_response and key_correct and arduino_response_time > 0 and arduino_response_time < 900:
          msg=" "#Correct! RT=%.3f" %(resp.rt)
          Feedback = "Correct"
        #elif key_resp.keys and key_resp.rt < 0.933:
        elif key_response and arduino_response_time < 0:
          msg = "Too soon"
          Feedback = "Distractor Response"
        #elif not (key_resp.keys):
        elif not key_response:
            msg = "Error"
            Feedback = "Omission"
        #elif key_resp.keys and key_resp.rt > 1.833:
        elif key_response and arduino_response_time > 900:
            msg = "Too Slow"
            Feedback = "TooSlow"
        else:
          msg="Error"
          Feedback = "Incorrect"

        thisExp.addData('Feedback', Feedback)

        #Use the statement below when converting to online
        #psychoJS.experiment.addData('Feedback', Feedback)
    TextComponent Message
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.200
      text [set every repeat] = $msg
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  Routine Trial
    KeyboardComponent key_resp
      allowedKeys = 'f','g','n','j' 
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      store = first key
      storeCorrect = True
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    ImageComponent Distract
      image [set during: Trial.ISI_2] = $Distractor
      size = [400, 400]
      startVal [time (s)] = 0.46666666666
      stopVal [duration (frames)] = 8
      units = pix
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    ImageComponent Targ
      image [set during: Trial.ISI_2] = $Target
      size = [400,400]
      startVal [time (s)] = 1.400
      stopVal [duration (frames)] = 8
      units = pix
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    StaticComponent ISI_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.4
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    CodeComponent key_trial
      Code Type = Auto->JS
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      Begin Routine:
        p.send_flag(0)
        key_correct = False
        key_response = None
        psychopy_response_time = None
        arduino_response_time = None

        distract_stimulus_started = False
        distract_stimulus_ended = False
        target_stimulus_started = False
        target_stimulus_ended = False
      Each Frame:
        # TODO: send flags on stimluli onset
        #if t > 0.5 and t < 0.633:
        #    p.send_flag(1)
        #elif t > 1.433 and t < 1.566:
        #    p.send_flag(2)

        # TODO: send nonzero flags while stimuli are "on"
        if not distract_stimulus_started and t > 0.5 and t < 0.633:
            win.callOnFlip(p.send_flag,1)
            distractor_onset = t
            distract_stimulus_started = True

        if not distract_stimulus_ended and t > 0.633 and t < 1.433:
            win.callOnFlip(p.send_flag,0)
            distractor_offset = t
            distract_stimulus_ended = True

        if not target_stimulus_started and t > 1.433 and t < 1.566:
            win.callOnFlip(p.send_flag,2)
            target_onset = t
            target_stimulus_started = True

        if not target_stimulus_ended and t > 1.566:
            win.callOnFlip(p.send_flag,0)
            target_offset = t
            target_stimulus_ended = True

        which_key, press_time = p.kb_check(p.get_key_index(["F","G","J","N","ESC"]))
        if key_response is None and which_key.size != 0:
            psychopy_response_time = (t - target_onset) * 1000.0
            #print(f"{which_key} was pressed at {press_time}")
            key_response = p.get_key(which_key[0])
            key_press_time = press_time[0]
            if key_response == "ESC":
                p.close()  # close the connection to the keyboard, wait for background thread to close
                core.quit()  # quit the experiment
            key_correct = corrAns.upper() == key_response
            #p.reset_digital_state()
      End Routine:
        p.send_flag(0)

        if key_response is not None:
            # get all the samples from the last 3s.
            # The number of samples examined should vary based on the sample rate
            # and trial duration (e.g., trial duration x sample rate).
            _, _, flags, times = p.get_last_n_samples(3*sample_rate)
            flag_indexes = p.find_nonzero_flags(flags)
            flag_onsets = np.asarray(times)[flag_indexes]

            # Indicate the flag corresponding to target stimulus onset (0 = distractor, 1 = target)
            arduino_response_time = key_press_time - flag_onsets[1]

            #save to file
            thisExp.addData('Response Key', key_response)
            thisExp.addData('Key Correct', key_correct)
            thisExp.addData('PsychoPy Response Time (ms)', psychopy_response_time)
            thisExp.addData('Distractor_Onset_PsychoPy', distractor_onset)
            thisExp.addData('Target_Onset_PsychoPy', target_onset)

            #Add to .csv file
            thisExp.addData('Arduino Response Time (ms)', arduino_response_time)
            thisExp.addData('Distractor_Onset_Arduino (ms)', flag_onsets[0])
            thisExp.addData('Target_Onset_Arduino (ms)', flag_onsets[1])
            thisExp.addData('Arduino Key Press Time (ms)', key_press_time)
  Routine Hide_Cursor
    CodeComponent code_2
      Code Type = Py
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      Before Experiment:
        import pressurekeyboard as pkb
        import numpy as np
        import time
      Begin Experiment:
        output_path = r'C:\Users\acclab-admin\Dropbox (University of Michigan)\LSA-ACCLAB\Experiments_ACC_LAB\2022_2023\Matt\CSE\Neut_E2_Full\Force'
        sample_rate = 500
        p = pkb.PressureKeyboard()
        p.start_reading()  # starts background thread to read data into buffer
      Begin Routine:
        p.set_sample_rate(sample_rate)# sets the sample rate

        #set Code Type to Both to run both online and offline

        #Python code to hide cursor (offline)
        win.mouseVisible = False

        #JS code below that is inputted on the right (online)
        #document.body.style.cursor='none';
      End Experiment:
        p.close()

        #if not output_path == "":
        #    p.save_all_data(f"{output_path}{expInfo['participant']}_pressure-data.csv")
  Routine Practice_Code
    CodeComponent pract_code
      Code Type = Auto->JS
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      Begin Routine:
        x = 1 #placeholder
        NameOfFile = str(int(expInfo['participant'])) + '_Conditions_Practice.csv'
        NameOfBlock = 'Practice'

        if x == 1:

            nTrials = 36
            nTestTrials = 36
            nTrialTypes = 3
            nUniqueStimuli = 12
            nTrialsPerRun = nTrials
            nStimsPerBlock = nTrialsPerRun

            #initialize variables
            nTrialsPerBlock = int(nTrials)
            nBlocks = int(nTrials / nTrialsPerBlock)

            #Allows us to start over if the program gets stuck
            repeatvar = 1

            #Sequence =[];

            for thisBlock in range(0, nBlocks):

                while repeatvar == 1:

                    #First, we define an n by n matrix, where n=# of trial types to be randomized.
                    #Each number in the matrix indicates how many times each trial type is to be followed and preceded by every trial type in the design.
                    matrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                    repeatvar = 0

                    #Calculate first trial. Trial starts at point 0 (vs 1 in MATLAB)
                    a = int(np.floor(np.random.random() * nTrialTypes))

                    #OK- let's pretend that the first trial really did follow another trial type.
                    #Randomly pick the previous trial type.
                    prev_trial_type = int(np.floor(np.random.random() * nTrialTypes))

                    #Also, since this is the first trial (i.e., trial 1), it's odd. Odd = 0, Even = 1 for python
                    current_odd_even = 0

                    #Decrement the appropropriate counter
                    matrix[current_odd_even, prev_trial_type,a] = matrix[current_odd_even, prev_trial_type,a] - 1

                    #create a counter for the a variable. Will try to "append" the post value to this list
                    b = [a]

                    #Create the rest of the trial sequence
                    for counter in range(0, nTrialsPerBlock-1):

                        if counter % 2:
                            current_odd_even = 0#odd-numbered trial

                        else:
                            current_odd_even = 1#even-numbered trial

                        post = int(np.floor(np.random.random() * nTrialTypes))

                        #check sum across the third dimension ("prev trial") to see if there are any remaining positions.
                        if np.sum(matrix[current_odd_even, :,b[counter]]) == 0:

                            print('WE HAVE TO REPEAT BECAUSE WE GOT STUCK!')
                            counter=nTrials-1
                            repeatvar=1
                            break

                        else:

                            while matrix[current_odd_even,post, b[counter]] == 0:
                                post = int(np.floor(np.random.random() * nTrialTypes))

                        matrix[current_odd_even, post, b[counter]] = matrix[current_odd_even, post, b[counter]]- 1
                        b.append(post)

            TrialSequence = b

            OddCongTrials = np.concatenate([1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 2 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddCongTrials)

            EvenCongTrials = np.concatenate([3 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 4 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenCongTrials)

            OddIncongTrials = np.concatenate([5 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 6 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddIncongTrials)

            EvenIncongTrials = np.concatenate([7 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 8 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenIncongTrials)

            OddNeutTrials = np.concatenate([9 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 10 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddNeutTrials)

            EvenNeutTrials = np.concatenate([11 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 12 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenNeutTrials)


            StimulusSequence = 10 * np.ones(nTrialsPerRun, dtype = int)

            for ThisTrial in range(0,nTrialsPerRun):

                if (ThisTrial) % 2:

                    if TrialSequence[ThisTrial] == 0:

                        StimulusSequence[ThisTrial] = OddCongTrials[0]

                        OddCongTrials = OddCongTrials[1:]


                    elif TrialSequence[ThisTrial] == 1:

                        StimulusSequence[ThisTrial] = OddIncongTrials[0]

                        OddIncongTrials = OddIncongTrials[1:]


                    elif TrialSequence[ThisTrial] == 2:

                        StimulusSequence[ThisTrial] = OddNeutTrials[0]

                        OddNeutTrials = OddNeutTrials[1:]

                else:

                        if TrialSequence[ThisTrial] == 0:

                            StimulusSequence[ThisTrial] = EvenCongTrials[0]

                            EvenCongTrials = EvenCongTrials[1:]


                        elif TrialSequence[ThisTrial] == 1:

                            StimulusSequence[ThisTrial] = EvenIncongTrials[0]

                            EvenIncongTrials = EvenIncongTrials[1:]


                        elif TrialSequence[ThisTrial] == 2:

                            StimulusSequence[ThisTrial] = EvenNeutTrials[0]

                            EvenNeutTrials = EvenNeutTrials[1:]


            RunType = str(np.ones(nTrialsPerRun, dtype = int))
            RunType = RunType.split(' ')

            CurrTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            CurrTrialType = CurrTrialType.split(' ')

            PrevTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            PrevTrialType = PrevTrialType.split(' ')


            for ThisTrial in range(0,nTrialsPerRun):

                RunType[ThisTrial]= NameOfBlock

                if (StimulusSequence[ThisTrial] < 5):
                    CurrTrialType[ThisTrial] = 'Congruent'

                elif (StimulusSequence[ThisTrial] > 4) and (StimulusSequence[ThisTrial] < 9):
                    CurrTrialType[ThisTrial] = 'Incongruent'

                else:
                    CurrTrialType[ThisTrial] = 'Neutral'

                if (ThisTrial == 0):
                    PrevTrialType[ThisTrial] = 'None'

                else:
                    PrevTrialType[ThisTrial] = CurrTrialType[ThisTrial - 1]


            Distractor = str(np.ones(nTrialsPerRun, dtype = int))
            Distractor = Distractor.split(' ')

            Target = str(np.ones(nTrialsPerRun, dtype = int))
            Target = Target.split(' ')

            CorrectAnswer = str(np.ones(nTrialsPerRun, dtype = int))
            CorrectAnswer = CorrectAnswer.split(' ')

            Orientation_Prime = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Prime = Orientation_Prime.split(' ')

            Orientation_Probe = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Probe = Orientation_Probe.split(' ')




            for jjj in range(0,nTrialsPerRun):

                if StimulusSequence[jjj] == 1:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 2:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 3:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 4:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] = 'g'

                elif StimulusSequence[jjj] == 5:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 6:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 7:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 8:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'

                elif StimulusSequence[jjj] == 9:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 10:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 11:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 12:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'


                #The routine below checks if the counterbalancing worked.
                #To see CheckMatrix, uncomment "print(CheckMatrix)"
                #initialization (top) and final value at the end.
                #This allows one to see the initial and final values of each cell of the counterbalancing matrix, which should be
                #Initial: nTrials/(nTrialTypes*nTrialTypes)/2
                #Final: 0

                #Create a matrix of previous and current trial combinations, with separate
                #identical holders for odd and even trials like above
                #CheckMatrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                for i in range(1, nTrialsPerBlock):

                    #Establish whether this is an odd or even trial
                    if i % 2:#odd

                        Odd_or_Even = 0

                    else: #even

                        Odd_or_Even = 1

                #Decrement the appropriate cell of check matrix
                #CheckMatrix[b[i-1], b[i], Odd_or_Even] = CheckMatrix[b[i-1], b[i], Odd_or_Even] - 1

                #Finally decremement the "imaginary previous trial type" that we created
                #for the first, odd (Odd_Or_Even =1) trial
                #CheckMatrix[prev_trial_type, b[1], 1] = CheckMatrix[prev_trial_type, b[1], 1]-1

                #print(CheckMatrix)

            #delete conditions file if it already exists
            if os.path.isfile(NameOfFile) == 1:
                os.remove(NameOfFile)

            Info = {'RunType': '', 'Distractor': '','Target': '', 'corrAns': '', 'CurrTrialType': '', 'PrevTrialType': ''}# -*- coding: utf-8 -*-

            # An ExperimentHandler isn't essential but helps with data saving
            thisExample = data.ExperimentHandler(name='', version='',
            extraInfo=Info, runtimeInfo=None,
            savePickle=True, saveWideText=True)

            for i in range(0, nTrials):
                Info['RunType'] = RunType[i]
                Info['Distractor'] = Distractor[i]
                Info['Target'] = Target[i]
                Info['corrAns'] = CorrectAnswer[i]
                Info['CurrTrialType'] = CurrTrialType[i]
                Info['PrevTrialType'] = PrevTrialType[i]
                thisExample.nextEntry()

            thisExample.saveAsWideText(NameOfFile)
  Routine Interval
    TextComponent Interval_Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.8
      text = +
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    TextComponent Interval_Blank
      letterHeight = 0.1
      startVal [time (s)] = 1.8
      stopVal [duration (s)] = 0.2
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  Routine First_Test_Block
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        x = 1 #placeholder
        NameOfFile = str(int(expInfo['participant'])) + '_Conditions_Test1.csv'
        NameOfBlock = 'Test'

        if x == 1:

            nTrials = 72
            nTestTrials = 72
            nTrialTypes = 3
            nUniqueStimuli = 12
            nTrialsPerRun = nTrials
            nStimsPerBlock = nTrialsPerRun

            #initialize variables
            nTrialsPerBlock = int(nTrials)
            nBlocks = int(nTrials / nTrialsPerBlock)

            #Allows us to start over if the program gets stuck
            repeatvar = 1

            #Sequence =[];

            for thisBlock in range(0, nBlocks):

                while repeatvar == 1:

                    #First, we define an n by n matrix, where n=# of trial types to be randomized.
                    #Each number in the matrix indicates how many times each trial type is to be followed and preceded by every trial type in the design.
                    matrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                    repeatvar = 0

                    #Calculate first trial. Trial starts at point 0 (vs 1 in MATLAB)
                    a = int(np.floor(np.random.random() * nTrialTypes))

                    #OK- let's pretend that the first trial really did follow another trial type.
                    #Randomly pick the previous trial type.
                    prev_trial_type = int(np.floor(np.random.random() * nTrialTypes))

                    #Also, since this is the first trial (i.e., trial 1), it's odd. Odd = 0, Even = 1 for python
                    current_odd_even = 0

                    #Decrement the appropropriate counter
                    matrix[current_odd_even, prev_trial_type,a] = matrix[current_odd_even, prev_trial_type,a] - 1

                    #create a counter for the a variable. Will try to "append" the post value to this list
                    b = [a]

                    #Create the rest of the trial sequence
                    for counter in range(0, nTrialsPerBlock-1):

                        if counter % 2:
                            current_odd_even = 0#odd-numbered trial

                        else:
                            current_odd_even = 1#even-numbered trial

                        post = int(np.floor(np.random.random() * nTrialTypes))

                        #check sum across the third dimension ("prev trial") to see if there are any remaining positions.
                        if np.sum(matrix[current_odd_even, :,b[counter]]) == 0:

                            print('WE HAVE TO REPEAT BECAUSE WE GOT STUCK!')
                            counter=nTrials-1
                            repeatvar=1
                            break

                        else:

                            while matrix[current_odd_even,post, b[counter]] == 0:
                                post = int(np.floor(np.random.random() * nTrialTypes))

                        matrix[current_odd_even, post, b[counter]] = matrix[current_odd_even, post, b[counter]]- 1
                        b.append(post)

            TrialSequence = b

            OddCongTrials = np.concatenate([1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 2 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddCongTrials)

            EvenCongTrials = np.concatenate([3 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 4 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenCongTrials)

            OddIncongTrials = np.concatenate([5 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 6 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddIncongTrials)

            EvenIncongTrials = np.concatenate([7 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 8 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenIncongTrials)

            OddNeutTrials = np.concatenate([9 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 10 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddNeutTrials)

            EvenNeutTrials = np.concatenate([11 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 12 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenNeutTrials)


            StimulusSequence = 10 * np.ones(nTrialsPerRun, dtype = int)

            for ThisTrial in range(0,nTrialsPerRun):

                if (ThisTrial) % 2:

                    if TrialSequence[ThisTrial] == 0:

                        StimulusSequence[ThisTrial] = OddCongTrials[0]

                        OddCongTrials = OddCongTrials[1:]


                    elif TrialSequence[ThisTrial] == 1:

                        StimulusSequence[ThisTrial] = OddIncongTrials[0]

                        OddIncongTrials = OddIncongTrials[1:]


                    elif TrialSequence[ThisTrial] == 2:

                        StimulusSequence[ThisTrial] = OddNeutTrials[0]

                        OddNeutTrials = OddNeutTrials[1:]

                else:

                        if TrialSequence[ThisTrial] == 0:

                            StimulusSequence[ThisTrial] = EvenCongTrials[0]

                            EvenCongTrials = EvenCongTrials[1:]


                        elif TrialSequence[ThisTrial] == 1:

                            StimulusSequence[ThisTrial] = EvenIncongTrials[0]

                            EvenIncongTrials = EvenIncongTrials[1:]


                        elif TrialSequence[ThisTrial] == 2:

                            StimulusSequence[ThisTrial] = EvenNeutTrials[0]

                            EvenNeutTrials = EvenNeutTrials[1:]


            RunType = str(np.ones(nTrialsPerRun, dtype = int))
            RunType = RunType.split(' ')

            CurrTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            CurrTrialType = CurrTrialType.split(' ')

            PrevTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            PrevTrialType = PrevTrialType.split(' ')


            for ThisTrial in range(0,nTrialsPerRun):

                RunType[ThisTrial]= NameOfBlock

                if (StimulusSequence[ThisTrial] < 5):
                    CurrTrialType[ThisTrial] = 'Congruent'

                elif (StimulusSequence[ThisTrial] > 4) and (StimulusSequence[ThisTrial] < 9):
                    CurrTrialType[ThisTrial] = 'Incongruent'

                else:
                    CurrTrialType[ThisTrial] = 'Neutral'

                if (ThisTrial == 0):
                    PrevTrialType[ThisTrial] = 'None'

                else:
                    PrevTrialType[ThisTrial] = CurrTrialType[ThisTrial - 1]


            Distractor = str(np.ones(nTrialsPerRun, dtype = int))
            Distractor = Distractor.split(' ')

            Target = str(np.ones(nTrialsPerRun, dtype = int))
            Target = Target.split(' ')

            CorrectAnswer = str(np.ones(nTrialsPerRun, dtype = int))
            CorrectAnswer = CorrectAnswer.split(' ')

            Orientation_Prime = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Prime = Orientation_Prime.split(' ')

            Orientation_Probe = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Probe = Orientation_Probe.split(' ')




            for jjj in range(0,nTrialsPerRun):

                if StimulusSequence[jjj] == 1:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 2:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 3:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 4:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] = 'g'

                elif StimulusSequence[jjj] == 5:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 6:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 7:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 8:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'

                elif StimulusSequence[jjj] == 9:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 10:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 11:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 12:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'


                #The routine below checks if the counterbalancing worked.
                #To see CheckMatrix, uncomment "print(CheckMatrix)"
                #initialization (top) and final value at the end.
                #This allows one to see the initial and final values of each cell of the counterbalancing matrix, which should be
                #Initial: nTrials/(nTrialTypes*nTrialTypes)/2
                #Final: 0

                #Create a matrix of previous and current trial combinations, with separate
                #identical holders for odd and even trials like above
                #CheckMatrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                for i in range(1, nTrialsPerBlock):

                    #Establish whether this is an odd or even trial
                    if i % 2:#odd

                        Odd_or_Even = 0

                    else: #even

                        Odd_or_Even = 1

                #Decrement the appropriate cell of check matrix
                #CheckMatrix[b[i-1], b[i], Odd_or_Even] = CheckMatrix[b[i-1], b[i], Odd_or_Even] - 1

                #Finally decremement the "imaginary previous trial type" that we created
                #for the first, odd (Odd_Or_Even =1) trial
                #CheckMatrix[prev_trial_type, b[1], 1] = CheckMatrix[prev_trial_type, b[1], 1]-1

                #print(CheckMatrix)

            #delete conditions file if it already exists
            if os.path.isfile(NameOfFile) == 1:
                os.remove(NameOfFile)

            Info = {'RunType': '', 'Distractor': '','Target': '', 'corrAns': '', 'CurrTrialType': '', 'PrevTrialType': ''}# -*- coding: utf-8 -*-

            # An ExperimentHandler isn't essential but helps with data saving
            thisExample = data.ExperimentHandler(name='', version='',
            extraInfo=Info, runtimeInfo=None,
            savePickle=True, saveWideText=True)

            for i in range(0, nTrials):
                Info['RunType'] = RunType[i]
                Info['Distractor'] = Distractor[i]
                Info['Target'] = Target[i]
                Info['corrAns'] = CorrectAnswer[i]
                Info['CurrTrialType'] = CurrTrialType[i]
                Info['PrevTrialType'] = PrevTrialType[i]
                thisExample.nextEntry()

            thisExample.saveAsWideText(NameOfFile)
    TextComponent GoodJob_1
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Good job!

        Now we can start the test trials

        Press the spacebar to continue
    CodeComponent end_on_alt_13
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent Ready_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Second_Test_Block
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        x = 1 #placeholder
        NameOfFile = str(int(expInfo['participant'])) + '_Conditions_Test2.csv'
        NameOfBlock = 'Test'

        if x == 1:

            nTrials = 72
            nTestTrials = 72
            nTrialTypes = 3
            nUniqueStimuli = 12
            nTrialsPerRun = nTrials
            nStimsPerBlock = nTrialsPerRun

            #initialize variables
            nTrialsPerBlock = int(nTrials)
            nBlocks = int(nTrials / nTrialsPerBlock)

            #Allows us to start over if the program gets stuck
            repeatvar = 1

            #Sequence =[];

            for thisBlock in range(0, nBlocks):

                while repeatvar == 1:

                    #First, we define an n by n matrix, where n=# of trial types to be randomized.
                    #Each number in the matrix indicates how many times each trial type is to be followed and preceded by every trial type in the design.
                    matrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                    repeatvar = 0

                    #Calculate first trial. Trial starts at point 0 (vs 1 in MATLAB)
                    a = int(np.floor(np.random.random() * nTrialTypes))

                    #OK- let's pretend that the first trial really did follow another trial type.
                    #Randomly pick the previous trial type.
                    prev_trial_type = int(np.floor(np.random.random() * nTrialTypes))

                    #Also, since this is the first trial (i.e., trial 1), it's odd. Odd = 0, Even = 1 for python
                    current_odd_even = 0

                    #Decrement the appropropriate counter
                    matrix[current_odd_even, prev_trial_type,a] = matrix[current_odd_even, prev_trial_type,a] - 1

                    #create a counter for the a variable. Will try to "append" the post value to this list
                    b = [a]

                    #Create the rest of the trial sequence
                    for counter in range(0, nTrialsPerBlock-1):

                        if counter % 2:
                            current_odd_even = 0#odd-numbered trial

                        else:
                            current_odd_even = 1#even-numbered trial

                        post = int(np.floor(np.random.random() * nTrialTypes))

                        #check sum across the third dimension ("prev trial") to see if there are any remaining positions.
                        if np.sum(matrix[current_odd_even, :,b[counter]]) == 0:

                            print('WE HAVE TO REPEAT BECAUSE WE GOT STUCK!')
                            counter=nTrials-1
                            repeatvar=1
                            break

                        else:

                            while matrix[current_odd_even,post, b[counter]] == 0:
                                post = int(np.floor(np.random.random() * nTrialTypes))

                        matrix[current_odd_even, post, b[counter]] = matrix[current_odd_even, post, b[counter]]- 1
                        b.append(post)

            TrialSequence = b

            OddCongTrials = np.concatenate([1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 2 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddCongTrials)

            EvenCongTrials = np.concatenate([3 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 4 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenCongTrials)

            OddIncongTrials = np.concatenate([5 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 6 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddIncongTrials)

            EvenIncongTrials = np.concatenate([7 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 8 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenIncongTrials)

            OddNeutTrials = np.concatenate([9 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 10 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddNeutTrials)

            EvenNeutTrials = np.concatenate([11 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 12 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenNeutTrials)


            StimulusSequence = 10 * np.ones(nTrialsPerRun, dtype = int)

            for ThisTrial in range(0,nTrialsPerRun):

                if (ThisTrial) % 2:

                    if TrialSequence[ThisTrial] == 0:

                        StimulusSequence[ThisTrial] = OddCongTrials[0]

                        OddCongTrials = OddCongTrials[1:]


                    elif TrialSequence[ThisTrial] == 1:

                        StimulusSequence[ThisTrial] = OddIncongTrials[0]

                        OddIncongTrials = OddIncongTrials[1:]


                    elif TrialSequence[ThisTrial] == 2:

                        StimulusSequence[ThisTrial] = OddNeutTrials[0]

                        OddNeutTrials = OddNeutTrials[1:]

                else:

                        if TrialSequence[ThisTrial] == 0:

                            StimulusSequence[ThisTrial] = EvenCongTrials[0]

                            EvenCongTrials = EvenCongTrials[1:]


                        elif TrialSequence[ThisTrial] == 1:

                            StimulusSequence[ThisTrial] = EvenIncongTrials[0]

                            EvenIncongTrials = EvenIncongTrials[1:]


                        elif TrialSequence[ThisTrial] == 2:

                            StimulusSequence[ThisTrial] = EvenNeutTrials[0]

                            EvenNeutTrials = EvenNeutTrials[1:]


            RunType = str(np.ones(nTrialsPerRun, dtype = int))
            RunType = RunType.split(' ')

            CurrTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            CurrTrialType = CurrTrialType.split(' ')

            PrevTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            PrevTrialType = PrevTrialType.split(' ')


            for ThisTrial in range(0,nTrialsPerRun):

                RunType[ThisTrial]= NameOfBlock

                if (StimulusSequence[ThisTrial] < 5):
                    CurrTrialType[ThisTrial] = 'Congruent'

                elif (StimulusSequence[ThisTrial] > 4) and (StimulusSequence[ThisTrial] < 9):
                    CurrTrialType[ThisTrial] = 'Incongruent'

                else:
                    CurrTrialType[ThisTrial] = 'Neutral'

                if (ThisTrial == 0):
                    PrevTrialType[ThisTrial] = 'None'

                else:
                    PrevTrialType[ThisTrial] = CurrTrialType[ThisTrial - 1]


            Distractor = str(np.ones(nTrialsPerRun, dtype = int))
            Distractor = Distractor.split(' ')

            Target = str(np.ones(nTrialsPerRun, dtype = int))
            Target = Target.split(' ')

            CorrectAnswer = str(np.ones(nTrialsPerRun, dtype = int))
            CorrectAnswer = CorrectAnswer.split(' ')

            Orientation_Prime = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Prime = Orientation_Prime.split(' ')

            Orientation_Probe = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Probe = Orientation_Probe.split(' ')




            for jjj in range(0,nTrialsPerRun):

                if StimulusSequence[jjj] == 1:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 2:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 3:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 4:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] = 'g'

                elif StimulusSequence[jjj] == 5:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 6:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 7:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 8:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'

                elif StimulusSequence[jjj] == 9:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 10:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 11:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 12:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'


                #The routine below checks if the counterbalancing worked.
                #To see CheckMatrix, uncomment "print(CheckMatrix)"
                #initialization (top) and final value at the end.
                #This allows one to see the initial and final values of each cell of the counterbalancing matrix, which should be
                #Initial: nTrials/(nTrialTypes*nTrialTypes)/2
                #Final: 0

                #Create a matrix of previous and current trial combinations, with separate
                #identical holders for odd and even trials like above
                #CheckMatrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                for i in range(1, nTrialsPerBlock):

                    #Establish whether this is an odd or even trial
                    if i % 2:#odd

                        Odd_or_Even = 0

                    else: #even

                        Odd_or_Even = 1

                #Decrement the appropriate cell of check matrix
                #CheckMatrix[b[i-1], b[i], Odd_or_Even] = CheckMatrix[b[i-1], b[i], Odd_or_Even] - 1

                #Finally decremement the "imaginary previous trial type" that we created
                #for the first, odd (Odd_Or_Even =1) trial
                #CheckMatrix[prev_trial_type, b[1], 1] = CheckMatrix[prev_trial_type, b[1], 1]-1

                #print(CheckMatrix)

            #delete conditions file if it already exists
            if os.path.isfile(NameOfFile) == 1:
                os.remove(NameOfFile)

            Info = {'RunType': '', 'Distractor': '','Target': '', 'corrAns': '', 'CurrTrialType': '', 'PrevTrialType': ''}# -*- coding: utf-8 -*-

            # An ExperimentHandler isn't essential but helps with data saving
            thisExample = data.ExperimentHandler(name='', version='',
            extraInfo=Info, runtimeInfo=None,
            savePickle=True, saveWideText=True)

            for i in range(0, nTrials):
                Info['RunType'] = RunType[i]
                Info['Distractor'] = Distractor[i]
                Info['Target'] = Target[i]
                Info['corrAns'] = CorrectAnswer[i]
                Info['CurrTrialType'] = CurrTrialType[i]
                Info['PrevTrialType'] = PrevTrialType[i]
                thisExample.nextEntry()

            thisExample.saveAsWideText(NameOfFile)
    TextComponent Eight_More
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        There are eight more test blocks.

        You may rest before the next test block starts.

        When you are ready, press the spacebar to continue.
    CodeComponent end_on_alt_14
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent Ready_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Third_Test_Block
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        x = 1 #placeholder
        NameOfFile = str(int(expInfo['participant'])) + '_Conditions_Test3.csv'
        NameOfBlock = 'Test'

        if x == 1:

            nTrials = 72
            nTestTrials = 72
            nTrialTypes = 3
            nUniqueStimuli = 12
            nTrialsPerRun = nTrials
            nStimsPerBlock = nTrialsPerRun

            #initialize variables
            nTrialsPerBlock = int(nTrials)
            nBlocks = int(nTrials / nTrialsPerBlock)

            #Allows us to start over if the program gets stuck
            repeatvar = 1

            #Sequence =[];

            for thisBlock in range(0, nBlocks):

                while repeatvar == 1:

                    #First, we define an n by n matrix, where n=# of trial types to be randomized.
                    #Each number in the matrix indicates how many times each trial type is to be followed and preceded by every trial type in the design.
                    matrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                    repeatvar = 0

                    #Calculate first trial. Trial starts at point 0 (vs 1 in MATLAB)
                    a = int(np.floor(np.random.random() * nTrialTypes))

                    #OK- let's pretend that the first trial really did follow another trial type.
                    #Randomly pick the previous trial type.
                    prev_trial_type = int(np.floor(np.random.random() * nTrialTypes))

                    #Also, since this is the first trial (i.e., trial 1), it's odd. Odd = 0, Even = 1 for python
                    current_odd_even = 0

                    #Decrement the appropropriate counter
                    matrix[current_odd_even, prev_trial_type,a] = matrix[current_odd_even, prev_trial_type,a] - 1

                    #create a counter for the a variable. Will try to "append" the post value to this list
                    b = [a]

                    #Create the rest of the trial sequence
                    for counter in range(0, nTrialsPerBlock-1):

                        if counter % 2:
                            current_odd_even = 0#odd-numbered trial

                        else:
                            current_odd_even = 1#even-numbered trial

                        post = int(np.floor(np.random.random() * nTrialTypes))

                        #check sum across the third dimension ("prev trial") to see if there are any remaining positions.
                        if np.sum(matrix[current_odd_even, :,b[counter]]) == 0:

                            print('WE HAVE TO REPEAT BECAUSE WE GOT STUCK!')
                            counter=nTrials-1
                            repeatvar=1
                            break

                        else:

                            while matrix[current_odd_even,post, b[counter]] == 0:
                                post = int(np.floor(np.random.random() * nTrialTypes))

                        matrix[current_odd_even, post, b[counter]] = matrix[current_odd_even, post, b[counter]]- 1
                        b.append(post)

            TrialSequence = b

            OddCongTrials = np.concatenate([1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 2 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddCongTrials)

            EvenCongTrials = np.concatenate([3 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 4 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenCongTrials)

            OddIncongTrials = np.concatenate([5 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 6 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddIncongTrials)

            EvenIncongTrials = np.concatenate([7 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 8 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenIncongTrials)

            OddNeutTrials = np.concatenate([9 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 10 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddNeutTrials)

            EvenNeutTrials = np.concatenate([11 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 12 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenNeutTrials)


            StimulusSequence = 10 * np.ones(nTrialsPerRun, dtype = int)

            for ThisTrial in range(0,nTrialsPerRun):

                if (ThisTrial) % 2:

                    if TrialSequence[ThisTrial] == 0:

                        StimulusSequence[ThisTrial] = OddCongTrials[0]

                        OddCongTrials = OddCongTrials[1:]


                    elif TrialSequence[ThisTrial] == 1:

                        StimulusSequence[ThisTrial] = OddIncongTrials[0]

                        OddIncongTrials = OddIncongTrials[1:]


                    elif TrialSequence[ThisTrial] == 2:

                        StimulusSequence[ThisTrial] = OddNeutTrials[0]

                        OddNeutTrials = OddNeutTrials[1:]

                else:

                        if TrialSequence[ThisTrial] == 0:

                            StimulusSequence[ThisTrial] = EvenCongTrials[0]

                            EvenCongTrials = EvenCongTrials[1:]


                        elif TrialSequence[ThisTrial] == 1:

                            StimulusSequence[ThisTrial] = EvenIncongTrials[0]

                            EvenIncongTrials = EvenIncongTrials[1:]


                        elif TrialSequence[ThisTrial] == 2:

                            StimulusSequence[ThisTrial] = EvenNeutTrials[0]

                            EvenNeutTrials = EvenNeutTrials[1:]


            RunType = str(np.ones(nTrialsPerRun, dtype = int))
            RunType = RunType.split(' ')

            CurrTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            CurrTrialType = CurrTrialType.split(' ')

            PrevTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            PrevTrialType = PrevTrialType.split(' ')


            for ThisTrial in range(0,nTrialsPerRun):

                RunType[ThisTrial]= NameOfBlock

                if (StimulusSequence[ThisTrial] < 5):
                    CurrTrialType[ThisTrial] = 'Congruent'

                elif (StimulusSequence[ThisTrial] > 4) and (StimulusSequence[ThisTrial] < 9):
                    CurrTrialType[ThisTrial] = 'Incongruent'

                else:
                    CurrTrialType[ThisTrial] = 'Neutral'

                if (ThisTrial == 0):
                    PrevTrialType[ThisTrial] = 'None'

                else:
                    PrevTrialType[ThisTrial] = CurrTrialType[ThisTrial - 1]


            Distractor = str(np.ones(nTrialsPerRun, dtype = int))
            Distractor = Distractor.split(' ')

            Target = str(np.ones(nTrialsPerRun, dtype = int))
            Target = Target.split(' ')

            CorrectAnswer = str(np.ones(nTrialsPerRun, dtype = int))
            CorrectAnswer = CorrectAnswer.split(' ')

            Orientation_Prime = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Prime = Orientation_Prime.split(' ')

            Orientation_Probe = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Probe = Orientation_Probe.split(' ')




            for jjj in range(0,nTrialsPerRun):

                if StimulusSequence[jjj] == 1:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 2:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 3:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 4:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] = 'g'

                elif StimulusSequence[jjj] == 5:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 6:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 7:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 8:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'

                elif StimulusSequence[jjj] == 9:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 10:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 11:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 12:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'


                #The routine below checks if the counterbalancing worked.
                #To see CheckMatrix, uncomment "print(CheckMatrix)"
                #initialization (top) and final value at the end.
                #This allows one to see the initial and final values of each cell of the counterbalancing matrix, which should be
                #Initial: nTrials/(nTrialTypes*nTrialTypes)/2
                #Final: 0

                #Create a matrix of previous and current trial combinations, with separate
                #identical holders for odd and even trials like above
                #CheckMatrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                for i in range(1, nTrialsPerBlock):

                    #Establish whether this is an odd or even trial
                    if i % 2:#odd

                        Odd_or_Even = 0

                    else: #even

                        Odd_or_Even = 1

                #Decrement the appropriate cell of check matrix
                #CheckMatrix[b[i-1], b[i], Odd_or_Even] = CheckMatrix[b[i-1], b[i], Odd_or_Even] - 1

                #Finally decremement the "imaginary previous trial type" that we created
                #for the first, odd (Odd_Or_Even =1) trial
                #CheckMatrix[prev_trial_type, b[1], 1] = CheckMatrix[prev_trial_type, b[1], 1]-1

                #print(CheckMatrix)

            #delete conditions file if it already exists
            if os.path.isfile(NameOfFile) == 1:
                os.remove(NameOfFile)

            Info = {'RunType': '', 'Distractor': '','Target': '', 'corrAns': '', 'CurrTrialType': '', 'PrevTrialType': ''}# -*- coding: utf-8 -*-

            # An ExperimentHandler isn't essential but helps with data saving
            thisExample = data.ExperimentHandler(name='', version='',
            extraInfo=Info, runtimeInfo=None,
            savePickle=True, saveWideText=True)

            for i in range(0, nTrials):
                Info['RunType'] = RunType[i]
                Info['Distractor'] = Distractor[i]
                Info['Target'] = Target[i]
                Info['corrAns'] = CorrectAnswer[i]
                Info['CurrTrialType'] = CurrTrialType[i]
                Info['PrevTrialType'] = PrevTrialType[i]
                thisExample.nextEntry()

            thisExample.saveAsWideText(NameOfFile)
    TextComponent Seven_More
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        There are seven more test blocks.

        You may rest before the next test block starts.

        When you are ready, press the spacebar to continue.
    CodeComponent end_on_alt_15
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent Ready_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Fourth_Test_Block
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        x = 1 #placeholder
        NameOfFile = str(int(expInfo['participant'])) + '_Conditions_Test4.csv'
        NameOfBlock = 'Test'

        if x == 1:

            nTrials = 72
            nTestTrials = 72
            nTrialTypes = 3
            nUniqueStimuli = 12
            nTrialsPerRun = nTrials
            nStimsPerBlock = nTrialsPerRun

            #initialize variables
            nTrialsPerBlock = int(nTrials)
            nBlocks = int(nTrials / nTrialsPerBlock)

            #Allows us to start over if the program gets stuck
            repeatvar = 1

            #Sequence =[];

            for thisBlock in range(0, nBlocks):

                while repeatvar == 1:

                    #First, we define an n by n matrix, where n=# of trial types to be randomized.
                    #Each number in the matrix indicates how many times each trial type is to be followed and preceded by every trial type in the design.
                    matrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                    repeatvar = 0

                    #Calculate first trial. Trial starts at point 0 (vs 1 in MATLAB)
                    a = int(np.floor(np.random.random() * nTrialTypes))

                    #OK- let's pretend that the first trial really did follow another trial type.
                    #Randomly pick the previous trial type.
                    prev_trial_type = int(np.floor(np.random.random() * nTrialTypes))

                    #Also, since this is the first trial (i.e., trial 1), it's odd. Odd = 0, Even = 1 for python
                    current_odd_even = 0

                    #Decrement the appropropriate counter
                    matrix[current_odd_even, prev_trial_type,a] = matrix[current_odd_even, prev_trial_type,a] - 1

                    #create a counter for the a variable. Will try to "append" the post value to this list
                    b = [a]

                    #Create the rest of the trial sequence
                    for counter in range(0, nTrialsPerBlock-1):

                        if counter % 2:
                            current_odd_even = 0#odd-numbered trial

                        else:
                            current_odd_even = 1#even-numbered trial

                        post = int(np.floor(np.random.random() * nTrialTypes))

                        #check sum across the third dimension ("prev trial") to see if there are any remaining positions.
                        if np.sum(matrix[current_odd_even, :,b[counter]]) == 0:

                            print('WE HAVE TO REPEAT BECAUSE WE GOT STUCK!')
                            counter=nTrials-1
                            repeatvar=1
                            break

                        else:

                            while matrix[current_odd_even,post, b[counter]] == 0:
                                post = int(np.floor(np.random.random() * nTrialTypes))

                        matrix[current_odd_even, post, b[counter]] = matrix[current_odd_even, post, b[counter]]- 1
                        b.append(post)

            TrialSequence = b

            OddCongTrials = np.concatenate([1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 2 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddCongTrials)

            EvenCongTrials = np.concatenate([3 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 4 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenCongTrials)

            OddIncongTrials = np.concatenate([5 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 6 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddIncongTrials)

            EvenIncongTrials = np.concatenate([7 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 8 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenIncongTrials)

            OddNeutTrials = np.concatenate([9 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 10 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddNeutTrials)

            EvenNeutTrials = np.concatenate([11 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 12 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenNeutTrials)


            StimulusSequence = 10 * np.ones(nTrialsPerRun, dtype = int)

            for ThisTrial in range(0,nTrialsPerRun):

                if (ThisTrial) % 2:

                    if TrialSequence[ThisTrial] == 0:

                        StimulusSequence[ThisTrial] = OddCongTrials[0]

                        OddCongTrials = OddCongTrials[1:]


                    elif TrialSequence[ThisTrial] == 1:

                        StimulusSequence[ThisTrial] = OddIncongTrials[0]

                        OddIncongTrials = OddIncongTrials[1:]


                    elif TrialSequence[ThisTrial] == 2:

                        StimulusSequence[ThisTrial] = OddNeutTrials[0]

                        OddNeutTrials = OddNeutTrials[1:]

                else:

                        if TrialSequence[ThisTrial] == 0:

                            StimulusSequence[ThisTrial] = EvenCongTrials[0]

                            EvenCongTrials = EvenCongTrials[1:]


                        elif TrialSequence[ThisTrial] == 1:

                            StimulusSequence[ThisTrial] = EvenIncongTrials[0]

                            EvenIncongTrials = EvenIncongTrials[1:]


                        elif TrialSequence[ThisTrial] == 2:

                            StimulusSequence[ThisTrial] = EvenNeutTrials[0]

                            EvenNeutTrials = EvenNeutTrials[1:]


            RunType = str(np.ones(nTrialsPerRun, dtype = int))
            RunType = RunType.split(' ')

            CurrTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            CurrTrialType = CurrTrialType.split(' ')

            PrevTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            PrevTrialType = PrevTrialType.split(' ')


            for ThisTrial in range(0,nTrialsPerRun):

                RunType[ThisTrial]= NameOfBlock

                if (StimulusSequence[ThisTrial] < 5):
                    CurrTrialType[ThisTrial] = 'Congruent'

                elif (StimulusSequence[ThisTrial] > 4) and (StimulusSequence[ThisTrial] < 9):
                    CurrTrialType[ThisTrial] = 'Incongruent'

                else:
                    CurrTrialType[ThisTrial] = 'Neutral'

                if (ThisTrial == 0):
                    PrevTrialType[ThisTrial] = 'None'

                else:
                    PrevTrialType[ThisTrial] = CurrTrialType[ThisTrial - 1]


            Distractor = str(np.ones(nTrialsPerRun, dtype = int))
            Distractor = Distractor.split(' ')

            Target = str(np.ones(nTrialsPerRun, dtype = int))
            Target = Target.split(' ')

            CorrectAnswer = str(np.ones(nTrialsPerRun, dtype = int))
            CorrectAnswer = CorrectAnswer.split(' ')

            Orientation_Prime = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Prime = Orientation_Prime.split(' ')

            Orientation_Probe = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Probe = Orientation_Probe.split(' ')




            for jjj in range(0,nTrialsPerRun):

                if StimulusSequence[jjj] == 1:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 2:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 3:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 4:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] = 'g'

                elif StimulusSequence[jjj] == 5:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 6:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 7:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 8:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'

                elif StimulusSequence[jjj] == 9:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 10:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 11:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 12:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'


                #The routine below checks if the counterbalancing worked.
                #To see CheckMatrix, uncomment "print(CheckMatrix)"
                #initialization (top) and final value at the end.
                #This allows one to see the initial and final values of each cell of the counterbalancing matrix, which should be
                #Initial: nTrials/(nTrialTypes*nTrialTypes)/2
                #Final: 0

                #Create a matrix of previous and current trial combinations, with separate
                #identical holders for odd and even trials like above
                #CheckMatrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                for i in range(1, nTrialsPerBlock):

                    #Establish whether this is an odd or even trial
                    if i % 2:#odd

                        Odd_or_Even = 0

                    else: #even

                        Odd_or_Even = 1

                #Decrement the appropriate cell of check matrix
                #CheckMatrix[b[i-1], b[i], Odd_or_Even] = CheckMatrix[b[i-1], b[i], Odd_or_Even] - 1

                #Finally decremement the "imaginary previous trial type" that we created
                #for the first, odd (Odd_Or_Even =1) trial
                #CheckMatrix[prev_trial_type, b[1], 1] = CheckMatrix[prev_trial_type, b[1], 1]-1

                #print(CheckMatrix)

            #delete conditions file if it already exists
            if os.path.isfile(NameOfFile) == 1:
                os.remove(NameOfFile)

            Info = {'RunType': '', 'Distractor': '','Target': '', 'corrAns': '', 'CurrTrialType': '', 'PrevTrialType': ''}# -*- coding: utf-8 -*-

            # An ExperimentHandler isn't essential but helps with data saving
            thisExample = data.ExperimentHandler(name='', version='',
            extraInfo=Info, runtimeInfo=None,
            savePickle=True, saveWideText=True)

            for i in range(0, nTrials):
                Info['RunType'] = RunType[i]
                Info['Distractor'] = Distractor[i]
                Info['Target'] = Target[i]
                Info['corrAns'] = CorrectAnswer[i]
                Info['CurrTrialType'] = CurrTrialType[i]
                Info['PrevTrialType'] = PrevTrialType[i]
                thisExample.nextEntry()

            thisExample.saveAsWideText(NameOfFile)
    TextComponent Six_More
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        There are six more test blocks.

        You may rest before the next test block starts.

        When you are ready, press the spacebar to continue.
    CodeComponent end_on_alt_16
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent Ready_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Fifth_Test_Block
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        x = 1 #placeholder
        NameOfFile = str(int(expInfo['participant'])) + '_Conditions_Test5.csv'
        NameOfBlock = 'Test'

        if x == 1:

            nTrials = 72
            nTestTrials = 72
            nTrialTypes = 3
            nUniqueStimuli = 12
            nTrialsPerRun = nTrials
            nStimsPerBlock = nTrialsPerRun

            #initialize variables
            nTrialsPerBlock = int(nTrials)
            nBlocks = int(nTrials / nTrialsPerBlock)

            #Allows us to start over if the program gets stuck
            repeatvar = 1

            #Sequence =[];

            for thisBlock in range(0, nBlocks):

                while repeatvar == 1:

                    #First, we define an n by n matrix, where n=# of trial types to be randomized.
                    #Each number in the matrix indicates how many times each trial type is to be followed and preceded by every trial type in the design.
                    matrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                    repeatvar = 0

                    #Calculate first trial. Trial starts at point 0 (vs 1 in MATLAB)
                    a = int(np.floor(np.random.random() * nTrialTypes))

                    #OK- let's pretend that the first trial really did follow another trial type.
                    #Randomly pick the previous trial type.
                    prev_trial_type = int(np.floor(np.random.random() * nTrialTypes))

                    #Also, since this is the first trial (i.e., trial 1), it's odd. Odd = 0, Even = 1 for python
                    current_odd_even = 0

                    #Decrement the appropropriate counter
                    matrix[current_odd_even, prev_trial_type,a] = matrix[current_odd_even, prev_trial_type,a] - 1

                    #create a counter for the a variable. Will try to "append" the post value to this list
                    b = [a]

                    #Create the rest of the trial sequence
                    for counter in range(0, nTrialsPerBlock-1):

                        if counter % 2:
                            current_odd_even = 0#odd-numbered trial

                        else:
                            current_odd_even = 1#even-numbered trial

                        post = int(np.floor(np.random.random() * nTrialTypes))

                        #check sum across the third dimension ("prev trial") to see if there are any remaining positions.
                        if np.sum(matrix[current_odd_even, :,b[counter]]) == 0:

                            print('WE HAVE TO REPEAT BECAUSE WE GOT STUCK!')
                            counter=nTrials-1
                            repeatvar=1
                            break

                        else:

                            while matrix[current_odd_even,post, b[counter]] == 0:
                                post = int(np.floor(np.random.random() * nTrialTypes))

                        matrix[current_odd_even, post, b[counter]] = matrix[current_odd_even, post, b[counter]]- 1
                        b.append(post)

            TrialSequence = b

            OddCongTrials = np.concatenate([1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 2 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddCongTrials)

            EvenCongTrials = np.concatenate([3 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 4 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenCongTrials)

            OddIncongTrials = np.concatenate([5 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 6 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddIncongTrials)

            EvenIncongTrials = np.concatenate([7 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 8 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenIncongTrials)

            OddNeutTrials = np.concatenate([9 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 10 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddNeutTrials)

            EvenNeutTrials = np.concatenate([11 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 12 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenNeutTrials)


            StimulusSequence = 10 * np.ones(nTrialsPerRun, dtype = int)

            for ThisTrial in range(0,nTrialsPerRun):

                if (ThisTrial) % 2:

                    if TrialSequence[ThisTrial] == 0:

                        StimulusSequence[ThisTrial] = OddCongTrials[0]

                        OddCongTrials = OddCongTrials[1:]


                    elif TrialSequence[ThisTrial] == 1:

                        StimulusSequence[ThisTrial] = OddIncongTrials[0]

                        OddIncongTrials = OddIncongTrials[1:]


                    elif TrialSequence[ThisTrial] == 2:

                        StimulusSequence[ThisTrial] = OddNeutTrials[0]

                        OddNeutTrials = OddNeutTrials[1:]

                else:

                        if TrialSequence[ThisTrial] == 0:

                            StimulusSequence[ThisTrial] = EvenCongTrials[0]

                            EvenCongTrials = EvenCongTrials[1:]


                        elif TrialSequence[ThisTrial] == 1:

                            StimulusSequence[ThisTrial] = EvenIncongTrials[0]

                            EvenIncongTrials = EvenIncongTrials[1:]


                        elif TrialSequence[ThisTrial] == 2:

                            StimulusSequence[ThisTrial] = EvenNeutTrials[0]

                            EvenNeutTrials = EvenNeutTrials[1:]


            RunType = str(np.ones(nTrialsPerRun, dtype = int))
            RunType = RunType.split(' ')

            CurrTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            CurrTrialType = CurrTrialType.split(' ')

            PrevTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            PrevTrialType = PrevTrialType.split(' ')


            for ThisTrial in range(0,nTrialsPerRun):

                RunType[ThisTrial]= NameOfBlock

                if (StimulusSequence[ThisTrial] < 5):
                    CurrTrialType[ThisTrial] = 'Congruent'

                elif (StimulusSequence[ThisTrial] > 4) and (StimulusSequence[ThisTrial] < 9):
                    CurrTrialType[ThisTrial] = 'Incongruent'

                else:
                    CurrTrialType[ThisTrial] = 'Neutral'

                if (ThisTrial == 0):
                    PrevTrialType[ThisTrial] = 'None'

                else:
                    PrevTrialType[ThisTrial] = CurrTrialType[ThisTrial - 1]


            Distractor = str(np.ones(nTrialsPerRun, dtype = int))
            Distractor = Distractor.split(' ')

            Target = str(np.ones(nTrialsPerRun, dtype = int))
            Target = Target.split(' ')

            CorrectAnswer = str(np.ones(nTrialsPerRun, dtype = int))
            CorrectAnswer = CorrectAnswer.split(' ')

            Orientation_Prime = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Prime = Orientation_Prime.split(' ')

            Orientation_Probe = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Probe = Orientation_Probe.split(' ')




            for jjj in range(0,nTrialsPerRun):

                if StimulusSequence[jjj] == 1:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 2:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 3:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 4:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] = 'g'

                elif StimulusSequence[jjj] == 5:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 6:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 7:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 8:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'

                elif StimulusSequence[jjj] == 9:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 10:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 11:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 12:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'


                #The routine below checks if the counterbalancing worked.
                #To see CheckMatrix, uncomment "print(CheckMatrix)"
                #initialization (top) and final value at the end.
                #This allows one to see the initial and final values of each cell of the counterbalancing matrix, which should be
                #Initial: nTrials/(nTrialTypes*nTrialTypes)/2
                #Final: 0

                #Create a matrix of previous and current trial combinations, with separate
                #identical holders for odd and even trials like above
                #CheckMatrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                for i in range(1, nTrialsPerBlock):

                    #Establish whether this is an odd or even trial
                    if i % 2:#odd

                        Odd_or_Even = 0

                    else: #even

                        Odd_or_Even = 1

                #Decrement the appropriate cell of check matrix
                #CheckMatrix[b[i-1], b[i], Odd_or_Even] = CheckMatrix[b[i-1], b[i], Odd_or_Even] - 1

                #Finally decremement the "imaginary previous trial type" that we created
                #for the first, odd (Odd_Or_Even =1) trial
                #CheckMatrix[prev_trial_type, b[1], 1] = CheckMatrix[prev_trial_type, b[1], 1]-1

                #print(CheckMatrix)

            #delete conditions file if it already exists
            if os.path.isfile(NameOfFile) == 1:
                os.remove(NameOfFile)

            Info = {'RunType': '', 'Distractor': '','Target': '', 'corrAns': '', 'CurrTrialType': '', 'PrevTrialType': ''}# -*- coding: utf-8 -*-

            # An ExperimentHandler isn't essential but helps with data saving
            thisExample = data.ExperimentHandler(name='', version='',
            extraInfo=Info, runtimeInfo=None,
            savePickle=True, saveWideText=True)

            for i in range(0, nTrials):
                Info['RunType'] = RunType[i]
                Info['Distractor'] = Distractor[i]
                Info['Target'] = Target[i]
                Info['corrAns'] = CorrectAnswer[i]
                Info['CurrTrialType'] = CurrTrialType[i]
                Info['PrevTrialType'] = PrevTrialType[i]
                thisExample.nextEntry()

            thisExample.saveAsWideText(NameOfFile)
    TextComponent Five_More
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        There are five more test blocks.

        You may rest before the next test block starts.

        When you are ready, press the spacebar to continue.
    CodeComponent end_on_alt_17
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent Ready_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Sixth_Test_Block
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        x = 1 #placeholder
        NameOfFile = str(int(expInfo['participant'])) + '_Conditions_Test6.csv'
        NameOfBlock = 'Test'

        if x == 1:

            nTrials = 72
            nTestTrials = 72
            nTrialTypes = 3
            nUniqueStimuli = 12
            nTrialsPerRun = nTrials
            nStimsPerBlock = nTrialsPerRun

            #initialize variables
            nTrialsPerBlock = int(nTrials)
            nBlocks = int(nTrials / nTrialsPerBlock)

            #Allows us to start over if the program gets stuck
            repeatvar = 1

            #Sequence =[];

            for thisBlock in range(0, nBlocks):

                while repeatvar == 1:

                    #First, we define an n by n matrix, where n=# of trial types to be randomized.
                    #Each number in the matrix indicates how many times each trial type is to be followed and preceded by every trial type in the design.
                    matrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                    repeatvar = 0

                    #Calculate first trial. Trial starts at point 0 (vs 1 in MATLAB)
                    a = int(np.floor(np.random.random() * nTrialTypes))

                    #OK- let's pretend that the first trial really did follow another trial type.
                    #Randomly pick the previous trial type.
                    prev_trial_type = int(np.floor(np.random.random() * nTrialTypes))

                    #Also, since this is the first trial (i.e., trial 1), it's odd. Odd = 0, Even = 1 for python
                    current_odd_even = 0

                    #Decrement the appropropriate counter
                    matrix[current_odd_even, prev_trial_type,a] = matrix[current_odd_even, prev_trial_type,a] - 1

                    #create a counter for the a variable. Will try to "append" the post value to this list
                    b = [a]

                    #Create the rest of the trial sequence
                    for counter in range(0, nTrialsPerBlock-1):

                        if counter % 2:
                            current_odd_even = 0#odd-numbered trial

                        else:
                            current_odd_even = 1#even-numbered trial

                        post = int(np.floor(np.random.random() * nTrialTypes))

                        #check sum across the third dimension ("prev trial") to see if there are any remaining positions.
                        if np.sum(matrix[current_odd_even, :,b[counter]]) == 0:

                            print('WE HAVE TO REPEAT BECAUSE WE GOT STUCK!')
                            counter=nTrials-1
                            repeatvar=1
                            break

                        else:

                            while matrix[current_odd_even,post, b[counter]] == 0:
                                post = int(np.floor(np.random.random() * nTrialTypes))

                        matrix[current_odd_even, post, b[counter]] = matrix[current_odd_even, post, b[counter]]- 1
                        b.append(post)

            TrialSequence = b

            OddCongTrials = np.concatenate([1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 2 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddCongTrials)

            EvenCongTrials = np.concatenate([3 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 4 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenCongTrials)

            OddIncongTrials = np.concatenate([5 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 6 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddIncongTrials)

            EvenIncongTrials = np.concatenate([7 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 8 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenIncongTrials)

            OddNeutTrials = np.concatenate([9 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 10 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddNeutTrials)

            EvenNeutTrials = np.concatenate([11 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 12 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenNeutTrials)


            StimulusSequence = 10 * np.ones(nTrialsPerRun, dtype = int)

            for ThisTrial in range(0,nTrialsPerRun):

                if (ThisTrial) % 2:

                    if TrialSequence[ThisTrial] == 0:

                        StimulusSequence[ThisTrial] = OddCongTrials[0]

                        OddCongTrials = OddCongTrials[1:]


                    elif TrialSequence[ThisTrial] == 1:

                        StimulusSequence[ThisTrial] = OddIncongTrials[0]

                        OddIncongTrials = OddIncongTrials[1:]


                    elif TrialSequence[ThisTrial] == 2:

                        StimulusSequence[ThisTrial] = OddNeutTrials[0]

                        OddNeutTrials = OddNeutTrials[1:]

                else:

                        if TrialSequence[ThisTrial] == 0:

                            StimulusSequence[ThisTrial] = EvenCongTrials[0]

                            EvenCongTrials = EvenCongTrials[1:]


                        elif TrialSequence[ThisTrial] == 1:

                            StimulusSequence[ThisTrial] = EvenIncongTrials[0]

                            EvenIncongTrials = EvenIncongTrials[1:]


                        elif TrialSequence[ThisTrial] == 2:

                            StimulusSequence[ThisTrial] = EvenNeutTrials[0]

                            EvenNeutTrials = EvenNeutTrials[1:]


            RunType = str(np.ones(nTrialsPerRun, dtype = int))
            RunType = RunType.split(' ')

            CurrTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            CurrTrialType = CurrTrialType.split(' ')

            PrevTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            PrevTrialType = PrevTrialType.split(' ')


            for ThisTrial in range(0,nTrialsPerRun):

                RunType[ThisTrial]= NameOfBlock

                if (StimulusSequence[ThisTrial] < 5):
                    CurrTrialType[ThisTrial] = 'Congruent'

                elif (StimulusSequence[ThisTrial] > 4) and (StimulusSequence[ThisTrial] < 9):
                    CurrTrialType[ThisTrial] = 'Incongruent'

                else:
                    CurrTrialType[ThisTrial] = 'Neutral'

                if (ThisTrial == 0):
                    PrevTrialType[ThisTrial] = 'None'

                else:
                    PrevTrialType[ThisTrial] = CurrTrialType[ThisTrial - 1]


            Distractor = str(np.ones(nTrialsPerRun, dtype = int))
            Distractor = Distractor.split(' ')

            Target = str(np.ones(nTrialsPerRun, dtype = int))
            Target = Target.split(' ')

            CorrectAnswer = str(np.ones(nTrialsPerRun, dtype = int))
            CorrectAnswer = CorrectAnswer.split(' ')

            Orientation_Prime = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Prime = Orientation_Prime.split(' ')

            Orientation_Probe = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Probe = Orientation_Probe.split(' ')




            for jjj in range(0,nTrialsPerRun):

                if StimulusSequence[jjj] == 1:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 2:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 3:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 4:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] = 'g'

                elif StimulusSequence[jjj] == 5:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 6:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 7:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 8:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'

                elif StimulusSequence[jjj] == 9:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 10:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 11:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 12:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'


                #The routine below checks if the counterbalancing worked.
                #To see CheckMatrix, uncomment "print(CheckMatrix)"
                #initialization (top) and final value at the end.
                #This allows one to see the initial and final values of each cell of the counterbalancing matrix, which should be
                #Initial: nTrials/(nTrialTypes*nTrialTypes)/2
                #Final: 0

                #Create a matrix of previous and current trial combinations, with separate
                #identical holders for odd and even trials like above
                #CheckMatrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                for i in range(1, nTrialsPerBlock):

                    #Establish whether this is an odd or even trial
                    if i % 2:#odd

                        Odd_or_Even = 0

                    else: #even

                        Odd_or_Even = 1

                #Decrement the appropriate cell of check matrix
                #CheckMatrix[b[i-1], b[i], Odd_or_Even] = CheckMatrix[b[i-1], b[i], Odd_or_Even] - 1

                #Finally decremement the "imaginary previous trial type" that we created
                #for the first, odd (Odd_Or_Even =1) trial
                #CheckMatrix[prev_trial_type, b[1], 1] = CheckMatrix[prev_trial_type, b[1], 1]-1

                #print(CheckMatrix)

            #delete conditions file if it already exists
            if os.path.isfile(NameOfFile) == 1:
                os.remove(NameOfFile)

            Info = {'RunType': '', 'Distractor': '','Target': '', 'corrAns': '', 'CurrTrialType': '', 'PrevTrialType': ''}# -*- coding: utf-8 -*-

            # An ExperimentHandler isn't essential but helps with data saving
            thisExample = data.ExperimentHandler(name='', version='',
            extraInfo=Info, runtimeInfo=None,
            savePickle=True, saveWideText=True)

            for i in range(0, nTrials):
                Info['RunType'] = RunType[i]
                Info['Distractor'] = Distractor[i]
                Info['Target'] = Target[i]
                Info['corrAns'] = CorrectAnswer[i]
                Info['CurrTrialType'] = CurrTrialType[i]
                Info['PrevTrialType'] = PrevTrialType[i]
                thisExample.nextEntry()

            thisExample.saveAsWideText(NameOfFile)
    TextComponent Four_More
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        There are four more test blocks

        You may rest before the next test block starts

        When you are ready, press the spacebar to continue
    CodeComponent end_on_alt_18
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent Ready_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Seventh_Test_Block
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        x = 1 #placeholder
        NameOfFile = str(int(expInfo['participant'])) + '_Conditions_Test7.csv'
        NameOfBlock = 'Test'

        if x == 1:

            nTrials = 72
            nTestTrials = 72
            nTrialTypes = 3
            nUniqueStimuli = 12
            nTrialsPerRun = nTrials
            nStimsPerBlock = nTrialsPerRun

            #initialize variables
            nTrialsPerBlock = int(nTrials)
            nBlocks = int(nTrials / nTrialsPerBlock)

            #Allows us to start over if the program gets stuck
            repeatvar = 1

            #Sequence =[];

            for thisBlock in range(0, nBlocks):

                while repeatvar == 1:

                    #First, we define an n by n matrix, where n=# of trial types to be randomized.
                    #Each number in the matrix indicates how many times each trial type is to be followed and preceded by every trial type in the design.
                    matrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                    repeatvar = 0

                    #Calculate first trial. Trial starts at point 0 (vs 1 in MATLAB)
                    a = int(np.floor(np.random.random() * nTrialTypes))

                    #OK- let's pretend that the first trial really did follow another trial type.
                    #Randomly pick the previous trial type.
                    prev_trial_type = int(np.floor(np.random.random() * nTrialTypes))

                    #Also, since this is the first trial (i.e., trial 1), it's odd. Odd = 0, Even = 1 for python
                    current_odd_even = 0

                    #Decrement the appropropriate counter
                    matrix[current_odd_even, prev_trial_type,a] = matrix[current_odd_even, prev_trial_type,a] - 1

                    #create a counter for the a variable. Will try to "append" the post value to this list
                    b = [a]

                    #Create the rest of the trial sequence
                    for counter in range(0, nTrialsPerBlock-1):

                        if counter % 2:
                            current_odd_even = 0#odd-numbered trial

                        else:
                            current_odd_even = 1#even-numbered trial

                        post = int(np.floor(np.random.random() * nTrialTypes))

                        #check sum across the third dimension ("prev trial") to see if there are any remaining positions.
                        if np.sum(matrix[current_odd_even, :,b[counter]]) == 0:

                            print('WE HAVE TO REPEAT BECAUSE WE GOT STUCK!')
                            counter=nTrials-1
                            repeatvar=1
                            break

                        else:

                            while matrix[current_odd_even,post, b[counter]] == 0:
                                post = int(np.floor(np.random.random() * nTrialTypes))

                        matrix[current_odd_even, post, b[counter]] = matrix[current_odd_even, post, b[counter]]- 1
                        b.append(post)

            TrialSequence = b

            OddCongTrials = np.concatenate([1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 2 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddCongTrials)

            EvenCongTrials = np.concatenate([3 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 4 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenCongTrials)

            OddIncongTrials = np.concatenate([5 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 6 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddIncongTrials)

            EvenIncongTrials = np.concatenate([7 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 8 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenIncongTrials)

            OddNeutTrials = np.concatenate([9 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 10 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddNeutTrials)

            EvenNeutTrials = np.concatenate([11 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 12 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenNeutTrials)


            StimulusSequence = 10 * np.ones(nTrialsPerRun, dtype = int)

            for ThisTrial in range(0,nTrialsPerRun):

                if (ThisTrial) % 2:

                    if TrialSequence[ThisTrial] == 0:

                        StimulusSequence[ThisTrial] = OddCongTrials[0]

                        OddCongTrials = OddCongTrials[1:]


                    elif TrialSequence[ThisTrial] == 1:

                        StimulusSequence[ThisTrial] = OddIncongTrials[0]

                        OddIncongTrials = OddIncongTrials[1:]


                    elif TrialSequence[ThisTrial] == 2:

                        StimulusSequence[ThisTrial] = OddNeutTrials[0]

                        OddNeutTrials = OddNeutTrials[1:]

                else:

                        if TrialSequence[ThisTrial] == 0:

                            StimulusSequence[ThisTrial] = EvenCongTrials[0]

                            EvenCongTrials = EvenCongTrials[1:]


                        elif TrialSequence[ThisTrial] == 1:

                            StimulusSequence[ThisTrial] = EvenIncongTrials[0]

                            EvenIncongTrials = EvenIncongTrials[1:]


                        elif TrialSequence[ThisTrial] == 2:

                            StimulusSequence[ThisTrial] = EvenNeutTrials[0]

                            EvenNeutTrials = EvenNeutTrials[1:]


            RunType = str(np.ones(nTrialsPerRun, dtype = int))
            RunType = RunType.split(' ')

            CurrTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            CurrTrialType = CurrTrialType.split(' ')

            PrevTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            PrevTrialType = PrevTrialType.split(' ')


            for ThisTrial in range(0,nTrialsPerRun):

                RunType[ThisTrial]= NameOfBlock

                if (StimulusSequence[ThisTrial] < 5):
                    CurrTrialType[ThisTrial] = 'Congruent'

                elif (StimulusSequence[ThisTrial] > 4) and (StimulusSequence[ThisTrial] < 9):
                    CurrTrialType[ThisTrial] = 'Incongruent'

                else:
                    CurrTrialType[ThisTrial] = 'Neutral'

                if (ThisTrial == 0):
                    PrevTrialType[ThisTrial] = 'None'

                else:
                    PrevTrialType[ThisTrial] = CurrTrialType[ThisTrial - 1]


            Distractor = str(np.ones(nTrialsPerRun, dtype = int))
            Distractor = Distractor.split(' ')

            Target = str(np.ones(nTrialsPerRun, dtype = int))
            Target = Target.split(' ')

            CorrectAnswer = str(np.ones(nTrialsPerRun, dtype = int))
            CorrectAnswer = CorrectAnswer.split(' ')

            Orientation_Prime = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Prime = Orientation_Prime.split(' ')

            Orientation_Probe = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Probe = Orientation_Probe.split(' ')




            for jjj in range(0,nTrialsPerRun):

                if StimulusSequence[jjj] == 1:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 2:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 3:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 4:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] = 'g'

                elif StimulusSequence[jjj] == 5:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 6:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 7:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 8:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'

                elif StimulusSequence[jjj] == 9:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 10:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 11:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 12:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'


                #The routine below checks if the counterbalancing worked.
                #To see CheckMatrix, uncomment "print(CheckMatrix)"
                #initialization (top) and final value at the end.
                #This allows one to see the initial and final values of each cell of the counterbalancing matrix, which should be
                #Initial: nTrials/(nTrialTypes*nTrialTypes)/2
                #Final: 0

                #Create a matrix of previous and current trial combinations, with separate
                #identical holders for odd and even trials like above
                #CheckMatrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                for i in range(1, nTrialsPerBlock):

                    #Establish whether this is an odd or even trial
                    if i % 2:#odd

                        Odd_or_Even = 0

                    else: #even

                        Odd_or_Even = 1

                #Decrement the appropriate cell of check matrix
                #CheckMatrix[b[i-1], b[i], Odd_or_Even] = CheckMatrix[b[i-1], b[i], Odd_or_Even] - 1

                #Finally decremement the "imaginary previous trial type" that we created
                #for the first, odd (Odd_Or_Even =1) trial
                #CheckMatrix[prev_trial_type, b[1], 1] = CheckMatrix[prev_trial_type, b[1], 1]-1

                #print(CheckMatrix)

            #delete conditions file if it already exists
            if os.path.isfile(NameOfFile) == 1:
                os.remove(NameOfFile)

            Info = {'RunType': '', 'Distractor': '','Target': '', 'corrAns': '', 'CurrTrialType': '', 'PrevTrialType': ''}# -*- coding: utf-8 -*-

            # An ExperimentHandler isn't essential but helps with data saving
            thisExample = data.ExperimentHandler(name='', version='',
            extraInfo=Info, runtimeInfo=None,
            savePickle=True, saveWideText=True)

            for i in range(0, nTrials):
                Info['RunType'] = RunType[i]
                Info['Distractor'] = Distractor[i]
                Info['Target'] = Target[i]
                Info['corrAns'] = CorrectAnswer[i]
                Info['CurrTrialType'] = CurrTrialType[i]
                Info['PrevTrialType'] = PrevTrialType[i]
                thisExample.nextEntry()

            thisExample.saveAsWideText(NameOfFile)
    TextComponent Three_More
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        There are three more test blocks.

        You may rest before the next test block starts.

        When you are ready, press the spacebar to continue.
    CodeComponent end_on_alt_19
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent Ready_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Eighth_Test_Block
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        x = 1 #placeholder
        NameOfFile = str(int(expInfo['participant'])) + '_Conditions_Test8.csv'
        NameOfBlock = 'Test'

        if x == 1:

            nTrials = 72
            nTestTrials = 72
            nTrialTypes = 3
            nUniqueStimuli = 12
            nTrialsPerRun = nTrials
            nStimsPerBlock = nTrialsPerRun

            #initialize variables
            nTrialsPerBlock = int(nTrials)
            nBlocks = int(nTrials / nTrialsPerBlock)

            #Allows us to start over if the program gets stuck
            repeatvar = 1

            #Sequence =[];

            for thisBlock in range(0, nBlocks):

                while repeatvar == 1:

                    #First, we define an n by n matrix, where n=# of trial types to be randomized.
                    #Each number in the matrix indicates how many times each trial type is to be followed and preceded by every trial type in the design.
                    matrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                    repeatvar = 0

                    #Calculate first trial. Trial starts at point 0 (vs 1 in MATLAB)
                    a = int(np.floor(np.random.random() * nTrialTypes))

                    #OK- let's pretend that the first trial really did follow another trial type.
                    #Randomly pick the previous trial type.
                    prev_trial_type = int(np.floor(np.random.random() * nTrialTypes))

                    #Also, since this is the first trial (i.e., trial 1), it's odd. Odd = 0, Even = 1 for python
                    current_odd_even = 0

                    #Decrement the appropropriate counter
                    matrix[current_odd_even, prev_trial_type,a] = matrix[current_odd_even, prev_trial_type,a] - 1

                    #create a counter for the a variable. Will try to "append" the post value to this list
                    b = [a]

                    #Create the rest of the trial sequence
                    for counter in range(0, nTrialsPerBlock-1):

                        if counter % 2:
                            current_odd_even = 0#odd-numbered trial

                        else:
                            current_odd_even = 1#even-numbered trial

                        post = int(np.floor(np.random.random() * nTrialTypes))

                        #check sum across the third dimension ("prev trial") to see if there are any remaining positions.
                        if np.sum(matrix[current_odd_even, :,b[counter]]) == 0:

                            print('WE HAVE TO REPEAT BECAUSE WE GOT STUCK!')
                            counter=nTrials-1
                            repeatvar=1
                            break

                        else:

                            while matrix[current_odd_even,post, b[counter]] == 0:
                                post = int(np.floor(np.random.random() * nTrialTypes))

                        matrix[current_odd_even, post, b[counter]] = matrix[current_odd_even, post, b[counter]]- 1
                        b.append(post)

            TrialSequence = b

            OddCongTrials = np.concatenate([1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 2 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddCongTrials)

            EvenCongTrials = np.concatenate([3 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 4 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenCongTrials)

            OddIncongTrials = np.concatenate([5 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 6 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddIncongTrials)

            EvenIncongTrials = np.concatenate([7 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 8 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenIncongTrials)

            OddNeutTrials = np.concatenate([9 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 10 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddNeutTrials)

            EvenNeutTrials = np.concatenate([11 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 12 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenNeutTrials)


            StimulusSequence = 10 * np.ones(nTrialsPerRun, dtype = int)

            for ThisTrial in range(0,nTrialsPerRun):

                if (ThisTrial) % 2:

                    if TrialSequence[ThisTrial] == 0:

                        StimulusSequence[ThisTrial] = OddCongTrials[0]

                        OddCongTrials = OddCongTrials[1:]


                    elif TrialSequence[ThisTrial] == 1:

                        StimulusSequence[ThisTrial] = OddIncongTrials[0]

                        OddIncongTrials = OddIncongTrials[1:]


                    elif TrialSequence[ThisTrial] == 2:

                        StimulusSequence[ThisTrial] = OddNeutTrials[0]

                        OddNeutTrials = OddNeutTrials[1:]

                else:

                        if TrialSequence[ThisTrial] == 0:

                            StimulusSequence[ThisTrial] = EvenCongTrials[0]

                            EvenCongTrials = EvenCongTrials[1:]


                        elif TrialSequence[ThisTrial] == 1:

                            StimulusSequence[ThisTrial] = EvenIncongTrials[0]

                            EvenIncongTrials = EvenIncongTrials[1:]


                        elif TrialSequence[ThisTrial] == 2:

                            StimulusSequence[ThisTrial] = EvenNeutTrials[0]

                            EvenNeutTrials = EvenNeutTrials[1:]


            RunType = str(np.ones(nTrialsPerRun, dtype = int))
            RunType = RunType.split(' ')

            CurrTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            CurrTrialType = CurrTrialType.split(' ')

            PrevTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            PrevTrialType = PrevTrialType.split(' ')


            for ThisTrial in range(0,nTrialsPerRun):

                RunType[ThisTrial]= NameOfBlock

                if (StimulusSequence[ThisTrial] < 5):
                    CurrTrialType[ThisTrial] = 'Congruent'

                elif (StimulusSequence[ThisTrial] > 4) and (StimulusSequence[ThisTrial] < 9):
                    CurrTrialType[ThisTrial] = 'Incongruent'

                else:
                    CurrTrialType[ThisTrial] = 'Neutral'

                if (ThisTrial == 0):
                    PrevTrialType[ThisTrial] = 'None'

                else:
                    PrevTrialType[ThisTrial] = CurrTrialType[ThisTrial - 1]


            Distractor = str(np.ones(nTrialsPerRun, dtype = int))
            Distractor = Distractor.split(' ')

            Target = str(np.ones(nTrialsPerRun, dtype = int))
            Target = Target.split(' ')

            CorrectAnswer = str(np.ones(nTrialsPerRun, dtype = int))
            CorrectAnswer = CorrectAnswer.split(' ')

            Orientation_Prime = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Prime = Orientation_Prime.split(' ')

            Orientation_Probe = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Probe = Orientation_Probe.split(' ')




            for jjj in range(0,nTrialsPerRun):

                if StimulusSequence[jjj] == 1:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 2:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 3:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 4:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] = 'g'

                elif StimulusSequence[jjj] == 5:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 6:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 7:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 8:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'

                elif StimulusSequence[jjj] == 9:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 10:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 11:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 12:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'


                #The routine below checks if the counterbalancing worked.
                #To see CheckMatrix, uncomment "print(CheckMatrix)"
                #initialization (top) and final value at the end.
                #This allows one to see the initial and final values of each cell of the counterbalancing matrix, which should be
                #Initial: nTrials/(nTrialTypes*nTrialTypes)/2
                #Final: 0

                #Create a matrix of previous and current trial combinations, with separate
                #identical holders for odd and even trials like above
                #CheckMatrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                for i in range(1, nTrialsPerBlock):

                    #Establish whether this is an odd or even trial
                    if i % 2:#odd

                        Odd_or_Even = 0

                    else: #even

                        Odd_or_Even = 1

                #Decrement the appropriate cell of check matrix
                #CheckMatrix[b[i-1], b[i], Odd_or_Even] = CheckMatrix[b[i-1], b[i], Odd_or_Even] - 1

                #Finally decremement the "imaginary previous trial type" that we created
                #for the first, odd (Odd_Or_Even =1) trial
                #CheckMatrix[prev_trial_type, b[1], 1] = CheckMatrix[prev_trial_type, b[1], 1]-1

                #print(CheckMatrix)

            #delete conditions file if it already exists
            if os.path.isfile(NameOfFile) == 1:
                os.remove(NameOfFile)

            Info = {'RunType': '', 'Distractor': '','Target': '', 'corrAns': '', 'CurrTrialType': '', 'PrevTrialType': ''}# -*- coding: utf-8 -*-

            # An ExperimentHandler isn't essential but helps with data saving
            thisExample = data.ExperimentHandler(name='', version='',
            extraInfo=Info, runtimeInfo=None,
            savePickle=True, saveWideText=True)

            for i in range(0, nTrials):
                Info['RunType'] = RunType[i]
                Info['Distractor'] = Distractor[i]
                Info['Target'] = Target[i]
                Info['corrAns'] = CorrectAnswer[i]
                Info['CurrTrialType'] = CurrTrialType[i]
                Info['PrevTrialType'] = PrevTrialType[i]
                thisExample.nextEntry()

            thisExample.saveAsWideText(NameOfFile)
    TextComponent Two_More
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        There are two more test blocks

        You may rest before the next test block starts

        When you are ready, press the spacebar to continue
    CodeComponent end_on_alt_20
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent Ready_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Ninth_Test_Block
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        x = 1 #placeholder
        NameOfFile = str(int(expInfo['participant'])) + '_Conditions_Test9.csv'
        NameOfBlock = 'Test'

        if x == 1:

            nTrials = 72
            nTestTrials = 72
            nTrialTypes = 3
            nUniqueStimuli = 12
            nTrialsPerRun = nTrials
            nStimsPerBlock = nTrialsPerRun

            #initialize variables
            nTrialsPerBlock = int(nTrials)
            nBlocks = int(nTrials / nTrialsPerBlock)

            #Allows us to start over if the program gets stuck
            repeatvar = 1

            #Sequence =[];

            for thisBlock in range(0, nBlocks):

                while repeatvar == 1:

                    #First, we define an n by n matrix, where n=# of trial types to be randomized.
                    #Each number in the matrix indicates how many times each trial type is to be followed and preceded by every trial type in the design.
                    matrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                    repeatvar = 0

                    #Calculate first trial. Trial starts at point 0 (vs 1 in MATLAB)
                    a = int(np.floor(np.random.random() * nTrialTypes))

                    #OK- let's pretend that the first trial really did follow another trial type.
                    #Randomly pick the previous trial type.
                    prev_trial_type = int(np.floor(np.random.random() * nTrialTypes))

                    #Also, since this is the first trial (i.e., trial 1), it's odd. Odd = 0, Even = 1 for python
                    current_odd_even = 0

                    #Decrement the appropropriate counter
                    matrix[current_odd_even, prev_trial_type,a] = matrix[current_odd_even, prev_trial_type,a] - 1

                    #create a counter for the a variable. Will try to "append" the post value to this list
                    b = [a]

                    #Create the rest of the trial sequence
                    for counter in range(0, nTrialsPerBlock-1):

                        if counter % 2:
                            current_odd_even = 0#odd-numbered trial

                        else:
                            current_odd_even = 1#even-numbered trial

                        post = int(np.floor(np.random.random() * nTrialTypes))

                        #check sum across the third dimension ("prev trial") to see if there are any remaining positions.
                        if np.sum(matrix[current_odd_even, :,b[counter]]) == 0:

                            print('WE HAVE TO REPEAT BECAUSE WE GOT STUCK!')
                            counter=nTrials-1
                            repeatvar=1
                            break

                        else:

                            while matrix[current_odd_even,post, b[counter]] == 0:
                                post = int(np.floor(np.random.random() * nTrialTypes))

                        matrix[current_odd_even, post, b[counter]] = matrix[current_odd_even, post, b[counter]]- 1
                        b.append(post)

            TrialSequence = b

            OddCongTrials = np.concatenate([1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 2 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddCongTrials)

            EvenCongTrials = np.concatenate([3 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 4 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenCongTrials)

            OddIncongTrials = np.concatenate([5 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 6 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddIncongTrials)

            EvenIncongTrials = np.concatenate([7 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 8 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenIncongTrials)

            OddNeutTrials = np.concatenate([9 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 10 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(OddNeutTrials)

            EvenNeutTrials = np.concatenate([11 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int), 12 * 1 * np.ones([int((nTrialsPerRun / nUniqueStimuli))], dtype = int)])
            np.random.shuffle(EvenNeutTrials)


            StimulusSequence = 10 * np.ones(nTrialsPerRun, dtype = int)

            for ThisTrial in range(0,nTrialsPerRun):

                if (ThisTrial) % 2:

                    if TrialSequence[ThisTrial] == 0:

                        StimulusSequence[ThisTrial] = OddCongTrials[0]

                        OddCongTrials = OddCongTrials[1:]


                    elif TrialSequence[ThisTrial] == 1:

                        StimulusSequence[ThisTrial] = OddIncongTrials[0]

                        OddIncongTrials = OddIncongTrials[1:]


                    elif TrialSequence[ThisTrial] == 2:

                        StimulusSequence[ThisTrial] = OddNeutTrials[0]

                        OddNeutTrials = OddNeutTrials[1:]

                else:

                        if TrialSequence[ThisTrial] == 0:

                            StimulusSequence[ThisTrial] = EvenCongTrials[0]

                            EvenCongTrials = EvenCongTrials[1:]


                        elif TrialSequence[ThisTrial] == 1:

                            StimulusSequence[ThisTrial] = EvenIncongTrials[0]

                            EvenIncongTrials = EvenIncongTrials[1:]


                        elif TrialSequence[ThisTrial] == 2:

                            StimulusSequence[ThisTrial] = EvenNeutTrials[0]

                            EvenNeutTrials = EvenNeutTrials[1:]


            RunType = str(np.ones(nTrialsPerRun, dtype = int))
            RunType = RunType.split(' ')

            CurrTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            CurrTrialType = CurrTrialType.split(' ')

            PrevTrialType = str(np.ones(nTrialsPerRun, dtype = int))
            PrevTrialType = PrevTrialType.split(' ')


            for ThisTrial in range(0,nTrialsPerRun):

                RunType[ThisTrial]= NameOfBlock

                if (StimulusSequence[ThisTrial] < 5):
                    CurrTrialType[ThisTrial] = 'Congruent'

                elif (StimulusSequence[ThisTrial] > 4) and (StimulusSequence[ThisTrial] < 9):
                    CurrTrialType[ThisTrial] = 'Incongruent'

                else:
                    CurrTrialType[ThisTrial] = 'Neutral'

                if (ThisTrial == 0):
                    PrevTrialType[ThisTrial] = 'None'

                else:
                    PrevTrialType[ThisTrial] = CurrTrialType[ThisTrial - 1]


            Distractor = str(np.ones(nTrialsPerRun, dtype = int))
            Distractor = Distractor.split(' ')

            Target = str(np.ones(nTrialsPerRun, dtype = int))
            Target = Target.split(' ')

            CorrectAnswer = str(np.ones(nTrialsPerRun, dtype = int))
            CorrectAnswer = CorrectAnswer.split(' ')

            Orientation_Prime = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Prime = Orientation_Prime.split(' ')

            Orientation_Probe = str(np.ones(nTrialsPerRun, dtype = int))
            Orientation_Probe = Orientation_Probe.split(' ')




            for jjj in range(0,nTrialsPerRun):

                if StimulusSequence[jjj] == 1:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 2:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 3:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 4:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] = 'g'

                elif StimulusSequence[jjj] == 5:

                    Distractor[jjj] = 'Visual_Stimuli/D_Down.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 6:

                    Distractor[jjj] = 'Visual_Stimuli/D_Up.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 7:

                    Distractor[jjj] = 'Visual_Stimuli/D_Right.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 8:

                    Distractor[jjj] = 'Visual_Stimuli/D_Left.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'

                elif StimulusSequence[jjj] == 9:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Up.png'
                    CorrectAnswer[jjj] = 'j'

                elif StimulusSequence[jjj] == 10:

                    Distractor[jjj] = 'Visual_Stimuli/N_Vert.png'
                    Target[jjj] = 'Visual_Stimuli/T_Down.png'
                    CorrectAnswer[jjj] = 'n'

                elif StimulusSequence[jjj] == 11:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj] = 'Visual_Stimuli/T_Left.png'
                    CorrectAnswer[jjj] = 'f'

                elif StimulusSequence[jjj] == 12:

                    Distractor[jjj] = 'Visual_Stimuli/N_Horiz.png'
                    Target[jjj]= 'Visual_Stimuli/T_Right.png'
                    CorrectAnswer[jjj] ='g'


                #The routine below checks if the counterbalancing worked.
                #To see CheckMatrix, uncomment "print(CheckMatrix)"
                #initialization (top) and final value at the end.
                #This allows one to see the initial and final values of each cell of the counterbalancing matrix, which should be
                #Initial: nTrials/(nTrialTypes*nTrialTypes)/2
                #Final: 0

                #Create a matrix of previous and current trial combinations, with separate
                #identical holders for odd and even trials like above
                #CheckMatrix = np.array(((int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)),(int((nTrialsPerBlock / (nTrialTypes * nTrialTypes) / 2)) * np.ones([nTrialTypes, nTrialTypes], dtype = int)) ))

                for i in range(1, nTrialsPerBlock):

                    #Establish whether this is an odd or even trial
                    if i % 2:#odd

                        Odd_or_Even = 0

                    else: #even

                        Odd_or_Even = 1

                #Decrement the appropriate cell of check matrix
                #CheckMatrix[b[i-1], b[i], Odd_or_Even] = CheckMatrix[b[i-1], b[i], Odd_or_Even] - 1

                #Finally decremement the "imaginary previous trial type" that we created
                #for the first, odd (Odd_Or_Even =1) trial
                #CheckMatrix[prev_trial_type, b[1], 1] = CheckMatrix[prev_trial_type, b[1], 1]-1

                #print(CheckMatrix)

            #delete conditions file if it already exists
            if os.path.isfile(NameOfFile) == 1:
                os.remove(NameOfFile)

            Info = {'RunType': '', 'Distractor': '','Target': '', 'corrAns': '', 'CurrTrialType': '', 'PrevTrialType': ''}# -*- coding: utf-8 -*-

            # An ExperimentHandler isn't essential but helps with data saving
            thisExample = data.ExperimentHandler(name='', version='',
            extraInfo=Info, runtimeInfo=None,
            savePickle=True, saveWideText=True)

            for i in range(0, nTrials):
                Info['RunType'] = RunType[i]
                Info['Distractor'] = Distractor[i]
                Info['Target'] = Target[i]
                Info['corrAns'] = CorrectAnswer[i]
                Info['CurrTrialType'] = CurrTrialType[i]
                Info['PrevTrialType'] = PrevTrialType[i]
                thisExample.nextEntry()

            thisExample.saveAsWideText(NameOfFile)
    TextComponent One_More
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        There is one more test block.

        You may rest before the next test block starts.

        When you are ready, press the spacebar to continue.
    CodeComponent end_on_alt_21
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent Ready_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine Consent1
    ImageComponent Consent1_Image
      image = Consent1.png
      size = (1.3, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent Consent1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent end_on_alt
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
  Routine Consent2
    ImageComponent Consent2_Image
      image = Consent2.png
      size = (1.3, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent Consent2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent end_on_alt1
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
  Routine Consent3
    ImageComponent Consent3_Image
      image = Consent3.png
      size = (1.3, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent Consent3_resp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent end_on_alt2
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
  Routine FingerPlacement
    ImageComponent Placement_Image
      image = FingerPlacement.png
      size = (1.3, 1)
      startVal [time (s)] = 0.0
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    CodeComponent end_on_alt3
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent Placement_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions1
    KeyboardComponent Instructions1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent end_on_alt4
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    ImageComponent Instructions1_image
      image = Instructions1.png
      size = (1.3, 1)
      startVal [time (s)] = 0.0
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  Routine Instructions2
    KeyboardComponent Instructions2_resp
      allowedKeys = 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent end_on_Down_5
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["N", "ESC"]))  # check for N key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "N":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    ImageComponent Instructions2_Image
      image = Instructions2.png
      size = (1.3, 1)
      startVal [time (s)] = 0.0
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  Routine Debrief1
    KeyboardComponent End_Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent end_on_alt_23
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    TextComponent Debrief1_Txt
      letterHeight = 0.023
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Debriefing

        Irrelevant directional information can distract us and slow our ability to react in the moment. For example, imagine you are driving somewhere unfamiliar. Your GPS shows an arrow indicating that you should turn left but the road sign has an arrow indicating that you need to turn right. In this case, your GPS is a distraction that makes it difficult for you to turn to the right. Thus, you will likely be slower to turn right than if your GPS had also shown an arrow pointing to the right.

        In the task you just completed, these dynamics are also in play. In a trial wherein the first, distracting arrow points in a different direction than the second, target arrow – for example, when a left arrow precedes a right arrow – people are slower to identify the target arrow than when both arrows point in the same direction. Here, as in the GPS example, the first arrow is a distraction that impairs subjects’ ability to quickly identify the direction of the second arrow.

        Interestingly, subjects are less distractible right after we distract them. For example, after a trial that shows a left arrow and then a right arrow, people aren’t as distracted by an up arrow that precedes a down arrow. In other words, people “adapt” to being distracted, which makes them less susceptible to distraction in the future. We included trials with “neutral” rectangle distractors as a baseline for measuring precisely how people adapt to distraction (e.g., by focusing more on the target after the two arrows point in different directions, by focusing more on the distractor after the two arrows point in the same direction, or both).

        We think that such adaptation occurs because people expect the current trial to resemble the previous one. So, if the two arrows in the previous trial pointed in different directions, people anticipate that the two arrows in the current trial will also point in different directions. This would be like expecting your GPS to show an arrow that points in the wrong direction after doing so in the recent past. In this case, you wouldn’t be fooled by your GPS’s inaccuracy as much as if it had been correct previously. That is, you would adapt to distraction caused by your GPS.

        If you are interested in learning more about our research investigating how people minimize distraction from irrelevant stimuli, please see the papers below.

        References:

        Grant, L.D. & Weissman, D.H. (2017). An attentional mechanism for minimizing cross-modal distraction. Acta Psychologica, 174, 9-16.

        Weissman, D.H., Jiang, J., & Egner, T. (2014). Determinants of congruency sequence effects without learning and memory confounds. Journal of Experimental Psychology: Human  Perception and Performance, 40(5), 2022-2037.

        Press the spacebar to continue.
  Routine Debrief2
    TextComponent Debrief2_Txt
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        If you have questions about this research, including questions about your compensation for participating, you may contact the following:

        Investigators: Daniel H. Weissman, Matthew Dunaway, and Selena Tran
        Email: danweiss@umich.edu, mdunawa@umich.edu, sltran@umich.edu
        Mailing Address: 1012 East Hall
        Department of Psychology
        530 Church St
        Ann Arbor, MI 48109
        Telephone: (734) 615-8038

        Press the spacebar to continue.
    CodeComponent end_on_alt_24
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent Debrief2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Debrief3
    TextComponent Debrief3_Txt
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      wrapWidth = 1.25
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      text:
        If you have any questions about your rights as a research participant, or wish to obtain information, ask questions, or discuss any concerns about this study with someone other than the researcher(s), please contact the

        University of Michigan Health Sciences and Behavioral Sciences Institutional Review Board

        North Campus Research Complex
        2800 Plymouth Road
        Building 520, Room 1169
        Ann Arbor, MI 48109-2800

        Phone: (734) 936-0933
        Fax: 734-936-1852
        E-mail: irbhsbs@umich.edu

        Press the spacebar to end the experiment.
    CodeComponent end_on_alt_25
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent Debrief3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine Completion
    TextComponent Completion_Txt
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Congratulations on finishing the test blocks!


        Press the spacebar for the debriefing.
    CodeComponent end_on_alt_22
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent Completion_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine Instructions4
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent end_on_alt7
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    TextComponent Instructions4_Txt
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Please remember to respond as fast as possible without making mistakes.
        If you press the wrong key or take longer than 900 ms to respond an error message will appear.

        We will now give you two practice blocks.
        Each practice block will last about 50 seconds.

        After the practice blocks, there will be 9 test blocks.
        Each test block will last about 3 minutes.

        Press the spacebar to begin
  Routine Reminder
    ImageComponent Reminder1_Image
      image = Instructions1.png
      size = (1.3, 1)
      startVal [time (s)] = 0.0
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    CodeComponent end_on_alt6
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstructReminder
    ImageComponent Reminder2_Image
      image = Instruct_Reminder.png
      size = (1.3, 1)
      startVal [time (s)] = 0.0
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    CodeComponent end_on_alt_12
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent Reminder2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SecondPracticeBlock
    TextComponent SecondPractice_Txt
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Good Job!

        There is one more practice block

        Press the spacebar to continue
    CodeComponent end_on_alt_11
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(0.1)
      Each Frame:
        which_key, _ = p.kb_check(p.get_key_index(["ALT", "ESC"]))  # check for ALT key
        if which_key.size != 0:
            if p.get_key(which_key[0]) == "ALT":
                continueRoutine = False  # finish the routine
            elif p.get_key(which_key[0]) == "ESC":
                p.close()
                core.quit()
    KeyboardComponent SecondPractice_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine save_all_data
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        time.sleep(2.0)
        if not output_path == "":
            p.save_all_data(f"{output_path}{expInfo['participant']}_pressure-data.csv")
Flow
  Routine Hide_Cursor
  Routine Consent1
  Routine Consent2
  Routine Consent3
  Routine FingerPlacement
  Routine Instructions1
  Routine Instructions2
  Routine Reminder
  Routine Instructions4
  Routine Practice_Code
  Routine Interval
  LoopInitiator Pract1 loopType="TrialHandler"
    Selected rows = 0:18
    conditionsFile = $NameOfFile
    loopType = sequential
    nReps = 1
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    Routine Trial
    Routine Feedback
  LoopTerminator Pract1
  Routine SecondPracticeBlock
  Routine InstructReminder
  Routine Interval
  LoopInitiator Pract2 loopType="TrialHandler"
    Selected rows = 18:35
    conditionsFile = $NameOfFile
    loopType = sequential
    nReps = 1
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    Routine Trial
    Routine Feedback
  LoopTerminator Pract2
  Routine First_Test_Block
  Routine InstructReminder
  Routine Interval
  LoopInitiator Trials_1 loopType="TrialHandler"
    conditionsFile = $NameOfFile
    loopType = sequential
    nReps = 1
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    Routine Trial
    Routine Feedback
  LoopTerminator Trials_1
  Routine Second_Test_Block
  Routine InstructReminder
  Routine Interval
  LoopInitiator Trials_2 loopType="TrialHandler"
    conditionsFile = $NameOfFile
    loopType = sequential
    nReps = 1
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    Routine Trial
    Routine Feedback
  LoopTerminator Trials_2
  Routine Third_Test_Block
  Routine InstructReminder
  Routine Interval
  LoopInitiator Trials_3 loopType="TrialHandler"
    conditionsFile = $NameOfFile
    loopType = sequential
    nReps = 1
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    Routine Trial
    Routine Feedback
  LoopTerminator Trials_3
  Routine Fourth_Test_Block
  Routine InstructReminder
  Routine Interval
  LoopInitiator Trials_4 loopType="TrialHandler"
    conditionsFile = $NameOfFile
    loopType = sequential
    nReps = 1
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    Routine Trial
    Routine Feedback
  LoopTerminator Trials_4
  Routine Fifth_Test_Block
  Routine InstructReminder
  Routine Interval
  LoopInitiator Trials_5 loopType="TrialHandler"
    conditionsFile = $NameOfFile
    loopType = sequential
    nReps = 1
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    Routine Trial
    Routine Feedback
  LoopTerminator Trials_5
  Routine Sixth_Test_Block
  Routine InstructReminder
  Routine Interval
  LoopInitiator Trials_6 loopType="TrialHandler"
    conditionsFile = $NameOfFile
    loopType = sequential
    nReps = 1
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    Routine Trial
    Routine Feedback
  LoopTerminator Trials_6
  Routine Seventh_Test_Block
  Routine InstructReminder
  Routine Interval
  LoopInitiator Trials_7 loopType="TrialHandler"
    conditionsFile = $NameOfFile
    loopType = sequential
    nReps = 1
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    Routine Trial
    Routine Feedback
  LoopTerminator Trials_7
  Routine Eighth_Test_Block
  Routine InstructReminder
  Routine Interval
  LoopInitiator Trials_8 loopType="TrialHandler"
    conditionsFile = $NameOfFile
    loopType = sequential
    nReps = 1
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    Routine Trial
    Routine Feedback
  LoopTerminator Trials_8
  Routine Ninth_Test_Block
  Routine InstructReminder
  Routine Interval
  LoopInitiator Trials_9 loopType="TrialHandler"
    conditionsFile = $NameOfFile
    loopType = sequential
    nReps = 1
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    Routine Trial
    Routine Feedback
  LoopTerminator Trials_9
  Routine save_all_data
  Routine Completion
  Routine Debrief1
  Routine Debrief2
  Routine Debrief3
